<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>

  <!-- stage settings -->
  <stage>
    <x_sign type="int">1</x_sign>
    <y_sign type="int">1</y_sign>
    <flip_axis type="boolean">True</flip_axis>
  </stage>

  <!-- misc control -->
  <misc>
    <filter_names type="string">1,2,3,4,5,6</filter_names>
    <filter_position type="int">0</filter_position>
  </misc>

  <!-- steve settings -->
  <mosaic>
    <flip_horizontal type="boolean">True</flip_horizontal>
    <flip_vertical type="boolean">True</flip_vertical>
    <transpose type="boolean">True</transpose>
    <obj1 type="string">100x,0.160,0.0,0.0</obj1>
    <obj2 type="string">10x,1.60,227.0,-69.0</obj2>
    <obj3 type="string">2x,8.0,133.0,-244.0</obj3>
  </mosaic>

</settings>
